begintemplate GABAfsi
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, dend, axon
public all, somatic, axonal, basal

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist= new List()
  position(1500,1500,1500)
  synapses()
}

create soma, dend[84], axon[457]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 2 connect dend[i](0), dend(1)
  for i = 3, 4 connect dend[i](0), dend[i-1](1)
  connect dend[5](0), dend[3](1)
  connect dend[6](0), dend[2](1)
  connect dend[7](0), soma(0.5)
  for i = 8, 9 connect dend[i](0), dend[i-1](1)
  connect dend[10](0), dend[8](1)
  connect dend[11](0), dend[7](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  connect dend[14](0), soma(0.5)
  for i = 15, 16 connect dend[i](0), dend[14](1)
  for i = 17, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  for i = 21, 22 connect dend[i](0), dend[20](1)
  connect dend[23](0), dend[17](1)
  for i = 24, 25 connect dend[i](0), dend[i-1](1)
  connect dend[26](0), dend[24](1)
  connect dend[27](0), dend[23](1)
  for i = 28, 29 connect dend[i](0), dend[i-1](1)
  connect dend[30](0), dend[28](1)
  connect dend[31](0), dend[27](1)
  connect dend[32](0), dend[16](1)
  connect dend[33](0), soma(0.5)
  for i = 34, 35 connect dend[i](0), dend[i-1](1)
  connect dend[36](0), dend[34](1)
  connect dend[37](0), dend[33](1)
  for i = 38, 39 connect dend[i](0), dend[37](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  connect dend[42](0), soma(0.5)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  for i = 45, 46 connect dend[i](0), dend[44](1)
  connect dend[47](0), soma(0.5)
  for i = 48, 49 connect dend[i](0), dend[47](1)
  for i = 50, 52 connect dend[i](0), dend[i-1](1)
  connect dend[53](0), dend[51](1)
  connect dend[54](0), dend[50](1)
  connect dend[55](0), dend[49](1)
  for i = 56, 59 connect dend[i](0), dend[i-1](1)
  connect dend[60](0), dend[58](1)
  connect dend[61](0), dend[57](1)
  connect dend[62](0), dend[56](1)
  for i = 63, 67 connect dend[i](0), dend[i-1](1)
  connect dend[68](0), dend[66](1)
  connect dend[69](0), dend[65](1)
  connect dend[70](0), dend[64](1)
  connect dend[71](0), dend[63](1)
  for i = 72, 73 connect dend[i](0), dend[i-1](1)
  connect dend[74](0), dend[72](1)
  connect dend[75](0), dend[71](1)
  connect dend[76](0), dend[62](1)
  connect dend[77](0), dend[55](1)
  for i = 78, 79 connect dend[i](0), dend[i-1](1)
  connect dend[80](0), dend[78](1)
  connect dend[81](0), dend[77](1)
  for i = 82, 83 connect dend[i](0), dend[81](1)
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon(1)
  for i = 3, 4 connect axon[i](0), axon[2](1)
  for i = 5, 6 connect axon[i](0), axon[4](1)
  for i = 7, 8 connect axon[i](0), axon[6](1)
  for i = 9, 10 connect axon[i](0), axon[i-1](1)
  connect axon[11](0), axon[9](1)
  connect axon[12](0), axon[8](1)
  for i = 13, 14 connect axon[i](0), axon[12](1)
  for i = 15, 16 connect axon[i](0), axon[14](1)
  for i = 17, 19 connect axon[i](0), axon[i-1](1)
  connect axon[20](0), axon[18](1)
  for i = 21, 22 connect axon[i](0), axon[20](1)
  connect axon[23](0), axon[17](1)
  for i = 24, 25 connect axon[i](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[i-1](1)
  connect axon[28](0), axon[26](1)
  for i = 29, 33 connect axon[i](0), axon[i-1](1)
  connect axon[34](0), axon[32](1)
  for i = 35, 36 connect axon[i](0), axon[i-1](1)
  connect axon[37](0), axon[35](1)
  for i = 38, 39 connect axon[i](0), axon[37](1)
  connect axon[40](0), axon[34](1)
  connect axon[41](0), axon[31](1)
  connect axon[42](0), axon[30](1)
  connect axon[43](0), axon[29](1)
  for i = 44, 45 connect axon[i](0), axon[i-1](1)
  connect axon[46](0), axon[44](1)
  for i = 47, 48 connect axon[i](0), axon[46](1)
  for i = 49, 50 connect axon[i](0), axon[i-1](1)
  connect axon[51](0), axon[49](1)
  for i = 52, 53 connect axon[i](0), axon[i-1](1)
  connect axon[54](0), axon[52](1)
  for i = 55, 56 connect axon[i](0), axon[54](1)
  connect axon[57](0), axon[51](1)
  for i = 58, 59 connect axon[i](0), axon[i-1](1)
  connect axon[60](0), axon[58](1)
  for i = 61, 62 connect axon[i](0), axon[i-1](1)
  connect axon[63](0), axon[61](1)
  connect axon[64](0), axon[60](1)
  connect axon[65](0), axon[57](1)
  for i = 66, 67 connect axon[i](0), axon[65](1)
  connect axon[68](0), axon[48](1)
  for i = 69, 70 connect axon[i](0), axon[68](1)
  for i = 71, 72 connect axon[i](0), axon[70](1)
  for i = 73, 74 connect axon[i](0), axon[i-1](1)
  connect axon[75](0), axon[73](1)
  connect axon[76](0), axon[72](1)
  for i = 77, 78 connect axon[i](0), axon[i-1](1)
  connect axon[79](0), axon[77](1)
  for i = 80, 81 connect axon[i](0), axon[i-1](1)
  connect axon[82](0), axon[80](1)
  connect axon[83](0), axon[79](1)
  connect axon[84](0), axon[76](1)
  for i = 85, 86 connect axon[i](0), axon[i-1](1)
  connect axon[87](0), axon[85](1)
  for i = 88, 89 connect axon[i](0), axon[87](1)
  for i = 90, 91 connect axon[i](0), axon[i-1](1)
  connect axon[92](0), axon[90](1)
  for i = 93, 94 connect axon[i](0), axon[92](1)
  for i = 95, 96 connect axon[i](0), axon[94](1)
  for i = 97, 98 connect axon[i](0), axon[i-1](1)
  connect axon[99](0), axon[97](1)
  connect axon[100](0), axon[96](1)
  for i = 101, 102 connect axon[i](0), axon[100](1)
  for i = 103, 104 connect axon[i](0), axon[102](1)
  connect axon[105](0), axon[89](1)
  connect axon[106](0), axon[84](1)
  connect axon[107](0), axon[43](1)
  for i = 108, 109 connect axon[i](0), axon[107](1)
  for i = 110, 111 connect axon[i](0), axon[109](1)
  connect axon[112](0), axon[28](1)
  for i = 113, 114 connect axon[i](0), axon[112](1)
  connect axon[115](0), axon[25](1)
  for i = 116, 117 connect axon[i](0), axon[i-1](1)
  connect axon[118](0), axon[116](1)
  connect axon[119](0), axon[115](1)
  for i = 120, 121 connect axon[i](0), axon[119](1)
  for i = 122, 124 connect axon[i](0), axon[i-1](1)
  connect axon[125](0), axon[123](1)
  for i = 126, 129 connect axon[i](0), axon[i-1](1)
  connect axon[130](0), axon[128](1)
  connect axon[131](0), axon[127](1)
  for i = 132, 134 connect axon[i](0), axon[i-1](1)
  connect axon[135](0), axon[133](1)
  for i = 136, 137 connect axon[i](0), axon[i-1](1)
  connect axon[138](0), axon[136](1)
  for i = 139, 140 connect axon[i](0), axon[138](1)
  connect axon[141](0), axon[135](1)
  for i = 142, 143 connect axon[i](0), axon[141](1)
  connect axon[144](0), axon[132](1)
  for i = 145, 146 connect axon[i](0), axon[i-1](1)
  connect axon[147](0), axon[145](1)
  for i = 148, 149 connect axon[i](0), axon[147](1)
  connect axon[150](0), axon[144](1)
  connect axon[151](0), axon[131](1)
  connect axon[152](0), axon[126](1)
  connect axon[153](0), axon[125](1)
  for i = 154, 158 connect axon[i](0), axon[i-1](1)
  connect axon[159](0), axon[157](1)
  for i = 160, 161 connect axon[i](0), axon[159](1)
  connect axon[162](0), axon[156](1)
  connect axon[163](0), axon[155](1)
  connect axon[164](0), axon[154](1)
  for i = 165, 166 connect axon[i](0), axon[164](1)
  for i = 167, 168 connect axon[i](0), axon[166](1)
  for i = 169, 170 connect axon[i](0), axon[i-1](1)
  connect axon[171](0), axon[169](1)
  for i = 172, 173 connect axon[i](0), axon[171](1)
  connect axon[174](0), axon[168](1)
  for i = 175, 176 connect axon[i](0), axon[i-1](1)
  connect axon[177](0), axon[175](1)
  connect axon[178](0), axon[174](1)
  for i = 179, 180 connect axon[i](0), axon[178](1)
  for i = 181, 183 connect axon[i](0), axon[i-1](1)
  connect axon[184](0), axon[182](1)
  connect axon[185](0), axon[181](1)
  connect axon[186](0), axon[180](1)
  for i = 187, 188 connect axon[i](0), axon[186](1)
  connect axon[189](0), axon[153](1)
  for i = 190, 193 connect axon[i](0), axon[i-1](1)
  connect axon[194](0), axon[192](1)
  connect axon[195](0), axon[191](1)
  for i = 196, 197 connect axon[i](0), axon[i-1](1)
  connect axon[198](0), axon[196](1)
  for i = 199, 202 connect axon[i](0), axon[i-1](1)
  connect axon[203](0), axon[201](1)
  connect axon[204](0), axon[200](1)
  for i = 205, 206 connect axon[i](0), axon[204](1)
  connect axon[207](0), axon[199](1)
  connect axon[208](0), axon[198](1)
  for i = 209, 212 connect axon[i](0), axon[i-1](1)
  connect axon[213](0), axon[211](1)
  for i = 214, 215 connect axon[i](0), axon[213](1)
  for i = 216, 217 connect axon[i](0), axon[215](1)
  for i = 218, 219 connect axon[i](0), axon[217](1)
  connect axon[220](0), axon[210](1)
  for i = 221, 223 connect axon[i](0), axon[i-1](1)
  connect axon[224](0), axon[222](1)
  for i = 225, 226 connect axon[i](0), axon[224](1)
  for i = 227, 228 connect axon[i](0), axon[226](1)
  for i = 229, 230 connect axon[i](0), axon[i-1](1)
  connect axon[231](0), axon[229](1)
  connect axon[232](0), axon[228](1)
  topol_1()
}
proc topol_1() {
  for i = 233, 234 connect axon[i](0), axon[i-1](1)
  connect axon[235](0), axon[233](1)
  connect axon[236](0), axon[232](1)
  connect axon[237](0), axon[221](1)
  for i = 238, 239 connect axon[i](0), axon[237](1)
  for i = 240, 241 connect axon[i](0), axon[239](1)
  connect axon[242](0), axon[220](1)
  for i = 243, 244 connect axon[i](0), axon[i-1](1)
  connect axon[245](0), axon[243](1)
  for i = 246, 247 connect axon[i](0), axon[245](1)
  for i = 248, 249 connect axon[i](0), axon[247](1)
  connect axon[250](0), axon[242](1)
  for i = 251, 252 connect axon[i](0), axon[i-1](1)
  connect axon[253](0), axon[251](1)
  connect axon[254](0), axon[250](1)
  for i = 255, 256 connect axon[i](0), axon[i-1](1)
  connect axon[257](0), axon[255](1)
  connect axon[258](0), axon[254](1)
  connect axon[259](0), axon[209](1)
  for i = 260, 261 connect axon[i](0), axon[i-1](1)
  connect axon[262](0), axon[260](1)
  for i = 263, 264 connect axon[i](0), axon[262](1)
  for i = 265, 266 connect axon[i](0), axon[264](1)
  for i = 267, 269 connect axon[i](0), axon[i-1](1)
  connect axon[270](0), axon[268](1)
  for i = 271, 272 connect axon[i](0), axon[270](1)
  connect axon[273](0), axon[267](1)
  for i = 274, 275 connect axon[i](0), axon[273](1)
  connect axon[276](0), axon[266](1)
  connect axon[277](0), axon[259](1)
  for i = 278, 279 connect axon[i](0), axon[i-1](1)
  connect axon[280](0), axon[278](1)
  connect axon[281](0), axon[277](1)
  for i = 282, 283 connect axon[i](0), axon[i-1](1)
  connect axon[284](0), axon[282](1)
  for i = 285, 286 connect axon[i](0), axon[284](1)
  for i = 287, 288 connect axon[i](0), axon[286](1)
  connect axon[289](0), axon[281](1)
  for i = 290, 292 connect axon[i](0), axon[i-1](1)
  connect axon[293](0), axon[291](1)
  connect axon[294](0), axon[290](1)
  connect axon[295](0), axon[289](1)
  for i = 296, 297 connect axon[i](0), axon[295](1)
  connect axon[298](0), axon[208](1)
  for i = 299, 300 connect axon[i](0), axon[i-1](1)
  connect axon[301](0), axon[299](1)
  connect axon[302](0), axon[298](1)
  for i = 303, 304 connect axon[i](0), axon[302](1)
  for i = 305, 306 connect axon[i](0), axon[304](1)
  connect axon[307](0), axon[195](1)
  for i = 308, 309 connect axon[i](0), axon[307](1)
  connect axon[310](0), axon[190](1)
  for i = 311, 312 connect axon[i](0), axon[310](1)
  connect axon[313](0), axon[189](1)
  for i = 314, 315 connect axon[i](0), axon[i-1](1)
  connect axon[316](0), axon[314](1)
  connect axon[317](0), axon[313](1)
  for i = 318, 319 connect axon[i](0), axon[i-1](1)
  connect axon[320](0), axon[318](1)
  connect axon[321](0), axon[317](1)
  for i = 322, 323 connect axon[i](0), axon[321](1)
  for i = 324, 325 connect axon[i](0), axon[323](1)
  connect axon[326](0), axon[122](1)
  for i = 327, 330 connect axon[i](0), axon[i-1](1)
  connect axon[331](0), axon[329](1)
  for i = 332, 333 connect axon[i](0), axon[331](1)
  connect axon[334](0), axon[328](1)
  for i = 335, 336 connect axon[i](0), axon[334](1)
  for i = 337, 338 connect axon[i](0), axon[336](1)
  for i = 339, 340 connect axon[i](0), axon[338](1)
  for i = 341, 342 connect axon[i](0), axon[i-1](1)
  connect axon[343](0), axon[341](1)
  connect axon[344](0), axon[340](1)
  for i = 345, 347 connect axon[i](0), axon[i-1](1)
  connect axon[348](0), axon[346](1)
  connect axon[349](0), axon[345](1)
  connect axon[350](0), axon[344](1)
  connect axon[351](0), axon[327](1)
  for i = 352, 353 connect axon[i](0), axon[i-1](1)
  connect axon[354](0), axon[352](1)
  connect axon[355](0), axon[351](1)
  for i = 356, 359 connect axon[i](0), axon[i-1](1)
  connect axon[360](0), axon[358](1)
  for i = 361, 362 connect axon[i](0), axon[i-1](1)
  connect axon[363](0), axon[361](1)
  for i = 364, 365 connect axon[i](0), axon[363](1)
  for i = 366, 367 connect axon[i](0), axon[365](1)
  for i = 368, 369 connect axon[i](0), axon[i-1](1)
  connect axon[370](0), axon[368](1)
  connect axon[371](0), axon[367](1)
  for i = 372, 373 connect axon[i](0), axon[371](1)
  for i = 374, 375 connect axon[i](0), axon[i-1](1)
  connect axon[376](0), axon[374](1)
  connect axon[377](0), axon[373](1)
  for i = 378, 379 connect axon[i](0), axon[377](1)
  for i = 380, 381 connect axon[i](0), axon[379](1)
  for i = 382, 383 connect axon[i](0), axon[381](1)
  for i = 384, 385 connect axon[i](0), axon[383](1)
  connect axon[386](0), axon[360](1)
  connect axon[387](0), axon[357](1)
  connect axon[388](0), axon[356](1)
  connect axon[389](0), axon[355](1)
  for i = 390, 391 connect axon[i](0), axon[389](1)
  connect axon[392](0), axon[326](1)
  connect axon[393](0), axon[121](1)
  for i = 394, 396 connect axon[i](0), axon[i-1](1)
  connect axon[397](0), axon[395](1)
  for i = 398, 399 connect axon[i](0), axon[i-1](1)
  connect axon[400](0), axon[398](1)
  for i = 401, 402 connect axon[i](0), axon[400](1)
  for i = 403, 404 connect axon[i](0), axon[i-1](1)
  connect axon[405](0), axon[403](1)
  connect axon[406](0), axon[402](1)
  connect axon[407](0), axon[397](1)
  for i = 408, 409 connect axon[i](0), axon[407](1)
  for i = 410, 411 connect axon[i](0), axon[409](1)
  connect axon[412](0), axon[394](1)
  for i = 413, 414 connect axon[i](0), axon[i-1](1)
  connect axon[415](0), axon[413](1)
  for i = 416, 417 connect axon[i](0), axon[415](1)
  for i = 418, 419 connect axon[i](0), axon[417](1)
  for i = 420, 421 connect axon[i](0), axon[419](1)
  connect axon[422](0), axon[412](1)
  for i = 423, 424 connect axon[i](0), axon[i-1](1)
  connect axon[425](0), axon[423](1)
  connect axon[426](0), axon[422](1)
  for i = 427, 428 connect axon[i](0), axon[i-1](1)
  connect axon[429](0), axon[427](1)
  for i = 430, 431 connect axon[i](0), axon[429](1)
  for i = 432, 433 connect axon[i](0), axon[431](1)
  for i = 434, 435 connect axon[i](0), axon[433](1)
  connect axon[436](0), axon[426](1)
  connect axon[437](0), axon[393](1)
  for i = 438, 439 connect axon[i](0), axon[437](1)
  for i = 440, 441 connect axon[i](0), axon[439](1)
  connect axon[442](0), axon[16](1)
  for i = 443, 444 connect axon[i](0), axon[i-1](1)
  connect axon[445](0), axon[443](1)
  for i = 446, 447 connect axon[i](0), axon[i-1](1)
  connect axon[448](0), axon[446](1)
  connect axon[449](0), axon[445](1)
  connect axon[450](0), axon[442](1)
  for i = 451, 452 connect axon[i](0), axon[450](1)
  for i = 453, 454 connect axon[i](0), axon[i-1](1)
  connect axon[455](0), axon[453](1)
  connect axon[456](0), axon[452](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-6.69987, 0, 0, 13.3997)
	pt3dadd(0, 0, 0, 13.3997)
	pt3dadd(6.69987, 0, 0, 13.3997)
  }
  dend {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(5.34, -0.91, 8.26, 0.4)
	pt3dadd(6.62, -0.43, 7.04, 0.4)
	pt3dadd(8.29, -0.85, 6.84, 0.4)
	pt3dadd(9.58, -1.6, 6.66, 0.4)
	pt3dadd(9.91, -1.87, 6.6, 0.4)
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  }
}
proc shape3d_2() {
  dend[3] {	pt3dadd(48.18, -39.01, 16.22, 0.4)
	pt3dadd(48.96, -39.45, 16.1, 0.4)
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  }
}
proc shape3d_3() {
  dend[9] {	pt3dadd(48.07, -33.23, 45.29, 0.4)
	pt3dadd(48.5, -33.91, 45.21, 0.4)
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  }
}
proc shape3d_4() {
  dend[10] {	pt3dadd(45.32, 148.57, -15.34, 0.4)
	pt3dadd(44.82, 149.38, -14.09, 0.4)
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  }
}
proc shape3d_5() {
  dend[19] {	pt3dadd(4.18, 95.29, 5.23, 0.4)
	pt3dadd(4.22, 96.24, 5.29, 0.4)
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  }
}
proc shape3d_6() {
  dend[25] {	pt3dadd(-67.49, -3.86, 49.37, 0.4)
	pt3dadd(-68.77, -4.04, 50.64, 0.4)
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  }
}
proc shape3d_7() {
  dend[31] {	pt3dadd(-41.52, 106.13, -29.64, 0.4)
	pt3dadd(-42.73, 106.65, -29.49, 0.4)
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  }
}
proc shape3d_8() {
  dend[35] {	pt3dadd(-35.02, 19.09, -25.4, 0.4)
	pt3dadd(-35.51, 19.56, -25.32, 0.4)
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  }
}
proc shape3d_9() {
  dend[40] {	pt3dadd(13.31, -21.93, -14.75, 0.4)
	pt3dadd(14.02, -21.45, -14.77, 0.4)
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  }
}
proc shape3d_10() {
  dend[43] {	pt3dadd(28.07, -74.35, 46.3, 0.4)
	pt3dadd(29.32, -74.51, 47.33, 0.4)
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  }
}
proc shape3d_11() {
  dend[48] {	pt3dadd(73.2, 26.72, -13.31, 0.4)
	pt3dadd(73.95, 26.4, -14.54, 0.4)
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  }
}
proc shape3d_12() {
  dend[54] {	pt3dadd(-24.26, 23.36, -14.54, 0.4)
	pt3dadd(-25.21, 24.34, -15.5, 0.4)
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  }
}
proc shape3d_13() {
  dend[62] {	pt3dadd(1.11, 141.69, -28.8, 0.4)
	pt3dadd(1.26, 143.81, -28.66, 0.4)
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  }
}
proc shape3d_14() {
  dend[71] {	pt3dadd(8.32, 234.61, 27.74, 0.4)
	pt3dadd(9.25, 236.29, 27.79, 0.4)
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  }
}
proc shape3d_15() {
  dend[76] {	pt3dadd(5.12, 162.29, -16.21, 0.4)
	pt3dadd(6.26, 162.22, -16.31, 0.4)
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  }
}
proc shape3d_16() {
  dend[83] {	pt3dadd(38.27, 62.8, 3, 0.4)
	pt3dadd(39.17, 63.14, 4.08, 0.4)
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  }
}
proc shape3d_17() {
  axon[8] {	pt3dadd(30.26, -7.46, -24.47, 0.4)
	pt3dadd(29.62, -7.9, -23.29, 0.4)
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  }
}
proc shape3d_18() {
  axon[19] {	pt3dadd(14.86, -3.51, -5.51, 0.4)
	pt3dadd(15.66, -2.33, -4.37, 0.4)
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  }
}
proc shape3d_19() {
  axon[27] {	pt3dadd(-17.3, 51.2, -40.75, 0.4)
	pt3dadd(-17.06, 51.92, -40.72, 0.4)
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  }
}
proc shape3d_20() {
  axon[37] {	pt3dadd(-98.58, 119.15, -116.11, 0.4)
	pt3dadd(-99.21, 119.01, -117.21, 0.4)
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  }
}
proc shape3d_21() {
  axon[46] {	pt3dadd(-43.26, 155.29, -70.63, 0.4)
	pt3dadd(-43.4, 155.8, -70.58, 0.4)
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  }
}
proc shape3d_22() {
  axon[61] {	pt3dadd(-62.01, 195.63, -80.72, 0.4)
	pt3dadd(-62.15, 196.2, -80.66, 0.4)
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  }
}
proc shape3d_23() {
  axon[68] {	pt3dadd(-46.58, 168.13, -71.65, 0.4)
	pt3dadd(-46.61, 168.69, -71.6, 0.4)
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  }
}
proc shape3d_24() {
  axon[79] {	pt3dadd(-31.61, 215.35, -47.82, 0.4)
	pt3dadd(-31.02, 215.73, -46.69, 0.4)
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  }
}
proc shape3d_25() {
  axon[92] {	pt3dadd(-8.64, 187.79, -72.67, 0.4)
	pt3dadd(-9.03, 188.25, -72.61, 0.4)
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  }
}
proc shape3d_26() {
  axon[102] {	pt3dadd(-7.89, 163.19, -63.14, 0.4)
	pt3dadd(-8.55, 163.15, -63.06, 0.4)
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  }
}
proc shape3d_27() {
  axon[115] {	pt3dadd(-6.85, 38.06, -30.12, 0.4)
	pt3dadd(-6.51, 37.51, -30.21, 0.4)
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  }
}
proc shape3d_28() {
  axon[123] {  }
  axon[124] {pt3dclear()
	pt3dadd(2.82, -5.13, 35.54, 0.4)
	pt3dadd(2.42, -5.8, 35.52, 0.4)
	pt3dadd(1.81, -6.22, 35.56, 0.4)
  }
  axon[125] {pt3dclear()
	pt3dadd(2.82, -5.13, 35.54, 0.4)
	pt3dadd(3.83, -5.35, 36.56, 0.4)
	pt3dadd(5.08, -5.1, 36.47, 0.4)
	pt3dadd(6.08, -4.1, 36.45, 0.4)
	pt3dadd(7, -3.79, 36.38, 0.4)
	pt3dadd(7.74, -3.38, 36.34, 0.4)
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  }
}
proc shape3d_29() {
  axon[135] {	pt3dadd(-30.46, -0.37, 76.87, 0.4)
	pt3dadd(-31.25, -0.64, 76.92, 0.4)
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  }
}
proc shape3d_30() {
  axon[143] {	pt3dadd(-47.47, -25.56, 64.04, 0.4)
  }
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  }
}
proc shape3d_31() {
  axon[152] {	pt3dadd(24.55, 21.13, 64.04, 0.4)
	pt3dadd(24.19, 21.72, 64.12, 0.4)
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  }
}
proc shape3d_32() {
  axon[162] {	pt3dadd(-17.05, -21.13, -26.68, 0.4)
	pt3dadd(-17.9, -21.18, -26.6, 0.4)
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  }
}
proc shape3d_33() {
  axon[173] {	pt3dadd(-48.82, 66.27, -11.43, 0.4)
	pt3dadd(-48.63, 65.51, -10.34, 0.4)
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  }
}
proc shape3d_34() {
  axon[182] {	pt3dadd(-45.44, 152.51, -15.65, 0.4)
	pt3dadd(-45.36, 153.17, -15.61, 0.4)
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  }
}
proc shape3d_35() {
  axon[198] {	pt3dadd(33.81, 84.95, 2.63, 0.4)
	pt3dadd(33.64, 85.9, 2.73, 0.4)
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  }
}
proc shape3d_36() {
  axon[209] {	pt3dadd(28.3, 135.32, -6.81, 0.4)
	pt3dadd(28.28, 136.04, -6.75, 0.4)
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  }
}
proc shape3d_37() {
  axon[220] {	pt3dadd(-20.44, 214.03, -28.36, 0.4)
	pt3dadd(-20.74, 214.17, -28.33, 0.4)
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  }
}
proc shape3d_38() {
  axon[229] {  }
  axon[230] {pt3dclear()
	pt3dadd(-79.07, 303.4, -24.13, 0.4)
	pt3dadd(-78.23, 302.59, -24.27, 0.4)
	pt3dadd(-77.57, 301.59, -23.27, 0.4)
	pt3dadd(-77.07, 301.06, -23.34, 0.4)
	pt3dadd(-76.9, 300.56, -23.41, 0.4)
	pt3dadd(-76.65, 299.81, -22.34, 0.4)
  }
  axon[231] {pt3dclear()
	pt3dadd(-79.07, 303.4, -24.13, 0.4)
	pt3dadd(-79.48, 304.36, -24.02, 0.4)
	pt3dadd(-79.74, 304.91, -23.95, 0.4)
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  }
}
proc shape3d_39() {
  axon[239] {	pt3dadd(-85.21, 330.81, 8.21, 0.4)
	pt3dadd(-85.63, 331.78, 8.33, 0.4)
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  }
}
proc shape3d_40() {
  axon[245] {	pt3dadd(-75.07, 242.45, -22.18, 0.4)
	pt3dadd(-75.38, 243.36, -22.07, 0.4)
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  }
}
proc shape3d_41() {
  axon[253] {	pt3dadd(-65.3, 243.92, -51.62, 0.4)
	pt3dadd(-65.05, 243.23, -51.71, 0.4)
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  }
}
proc shape3d_42() {
  axon[261] {	pt3dadd(27.12, 177.61, -13.88, 0.4)
	pt3dadd(27.21, 177.1, -13.91, 0.4)
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  }
}
proc shape3d_43() {
  axon[272] {	pt3dadd(17.05, 225.82, -64.3, 0.4)
	pt3dadd(16.22, 225.77, -64.22, 0.4)
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  }
}
proc shape3d_44() {
  axon[284] {	pt3dadd(7, 192.45, 2.87, 0.4)
	pt3dadd(6.66, 192.29, 1.74, 0.4)
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  }
}
proc shape3d_45() {
  axon[292] {	pt3dadd(1.83, 236.28, -12.83, 0.4)
	pt3dadd(1.56, 237.28, -12.73, 0.4)
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  }
}
proc shape3d_46() {
  axon[305] {	pt3dadd(31.98, 130.05, 11.84, 0.4)
	pt3dadd(31.85, 130.48, 11.9, 0.4)
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  }
}
proc shape3d_47() {
  axon[316] {	pt3dadd(20.94, 44.02, -14.02, 0.4)
	pt3dadd(20.44, 43.38, -14.02, 0.4)
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  }
}
proc shape3d_48() {
  axon[324] {	pt3dadd(43.35, 90.02, -10.47, 0.4)
	pt3dadd(43.39, 90.35, -10.45, 0.4)
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  }
}
proc shape3d_49() {
  axon[331] {	pt3dadd(-18.69, 97.38, 11.99, 0.4)
	pt3dadd(-18.26, 97.76, 11.99, 0.4)
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  }
}
proc shape3d_50() {
  axon[338] {	pt3dadd(-25.07, 130.32, 24.22, 0.4)
	pt3dadd(-25.45, 131.42, 23.18, 0.4)
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  }
}
proc shape3d_51() {
  axon[345] {	pt3dadd(-58.47, 269.33, 52.62, 0.4)
	pt3dadd(-60, 268.98, 52.75, 0.4)
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  }
}
proc shape3d_52() {
  axon[355] {	pt3dadd(-40.61, 22.97, 26.9, 0.4)
	pt3dadd(-40.95, 24.22, 25.88, 0.4)
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  }
}
proc shape3d_53() {
  axon[362] {	pt3dadd(-112.14, 133.7, 24.79, 0.4)
	pt3dadd(-112.5, 134.75, 24.91, 0.4)
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  }
}
proc shape3d_54() {
  axon[373] {  }
  axon[374] {pt3dclear()
	pt3dadd(-117.88, 166.51, 8.31, 0.4)
	pt3dadd(-118.35, 166.26, 8.35, 0.4)
	pt3dadd(-119.32, 165.85, 8.42, 0.4)
	pt3dadd(-119.6, 165.07, 9.53, 0.4)
	pt3dadd(-120.02, 165.17, 9.58, 0.4)
	pt3dadd(-120.52, 165.23, 9.62, 0.4)
	pt3dadd(-121.27, 165.11, 9.68, 0.4)
	pt3dadd(-121.99, 164.63, 9.72, 0.4)
	pt3dadd(-122.63, 164.01, 9.74, 0.4)
	pt3dadd(-122.94, 163.73, 9.76, 0.4)
	pt3dadd(-122.16, 162.82, 11.88, 0.4)
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  }
}
proc shape3d_55() {
  axon[383] {	pt3dadd(-82.56, 182.57, 41.61, 0.4)
	pt3dadd(-82.98, 182.8, 41.68, 0.4)
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  }
}
proc shape3d_56() {
  axon[393] {	pt3dadd(8.94, -7.58, 25.61, 0.4)
	pt3dadd(9.59, -8.62, 25.47, 0.4)
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  }
}
proc shape3d_57() {
  axon[401] {	pt3dadd(3.62, -65.06, 33.32, 0.4)
	pt3dadd(3.62, -64.36, 33.37, 0.4)
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  }
}
proc shape3d_58() {
  axon[406] {	pt3dadd(11.83, -108.27, 65.97, 0.4)
	pt3dadd(11.63, -108.21, 67.14, 0.4)
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  }
}
proc shape3d_59() {
  axon[413] {	pt3dadd(49.67, -24.73, 20.43, 0.4)
	pt3dadd(50.14, -25, 20.38, 0.4)
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  }
}
proc shape3d_60() {
  axon[423] {	pt3dadd(48.24, -1.05, 14.32, 0.4)
	pt3dadd(48.15, -0.32, 13.24, 0.4)
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  }
}
proc shape3d_61() {
  axon[429] {	pt3dadd(20.07, -70.06, 17.61, 0.4)
	pt3dadd(19.16, -70.7, 17.66, 0.4)
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  }
}
proc shape3d_62() {
  axon[445] {	pt3dadd(43.09, 21.88, -39.54, 0.4)
	pt3dadd(43.67, 21.29, -39.65, 0.4)
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  }
}
proc shape3d_63() {
  axon[450] {	pt3dadd(41.96, 47.95, -32.93, 0.4)
	pt3dadd(41.71, 48.67, -32.85, 0.4)
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  }
}
proc shape3d_64() {
  axon[456] {	pt3dadd(-11.14, 110.72, -82.74, 0.4)
	pt3dadd(-10.98, 110.06, -82.8, 0.4)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
  shape3d_30()
  shape3d_31()
  shape3d_32()
  shape3d_33()
  shape3d_34()
  shape3d_35()
  shape3d_36()
  shape3d_37()
  shape3d_38()
  shape3d_39()
  shape3d_40()
  shape3d_41()
  shape3d_42()
  shape3d_43()
  shape3d_44()
  shape3d_45()
  shape3d_46()
  shape3d_47()
  shape3d_48()
  shape3d_49()
  shape3d_50()
  shape3d_51()
  shape3d_52()
  shape3d_53()
  shape3d_54()
  shape3d_55()
  shape3d_56()
  shape3d_57()
  shape3d_58()
  shape3d_59()
  shape3d_60()
  shape3d_61()
  shape3d_62()
  shape3d_63()
  shape3d_64()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 83 dend[i] all.append()
    for i=0, 456 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 456 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 83 dend[i] basal.append()

}
proc geom() {
    forsec all { } 
}

func lambda_f() { local i, x1, x2, d1, d2, lambda
    if (n3d() < 2) {
	return 1e5 * sqrt(diam / (4 * PI * $1 * Ra * cm))
	}
    x1 = arc3d(0)
    d1 = diam3d(0)
    lambda = 0

    for i = 1, n3d() - 1 {
	x2 = arc3d(i)
	d2 = diam3d(i)
	lambda += (x2 - x1) / sqrt(d1 + d2)
	x1 = x2
	d1 = d2
	}

    lambda *= sqrt(2) * 1e-5 * sqrt(4 * PI * $1 * Ra * cm)
    return L / lambda
}

proc geom_nseg() {
    forsec all {nseg = int((L/(0.1*lambda_f(100))+0.999)/2)*2 +1} 
}
proc biophys() { 
    forsec all {
          Ra= 35.4
          cm= 1
    }

    soma{
	insert NaV11
	insert NaV12
	insert NaV16
	insert KV11
	insert KV31
	insert KV32
	insert Ca12L
	insert Ca13L
	insert Ca22N
	insert HCN1
	insert HCN2
	insert NaKpump
	//insert capump
	insert leak
	//insert gabafrelease
	insert rel
     }

     for i=0,83 dend[i]{
	insert NaV11
	insert NaV12
	insert NaV16
	insert KV11
	insert KV31
	insert KV32
	insert Ca12L
	insert Ca13L
	insert Ca22N
	insert HCN1
	insert HCN2
	insert NaKpump
	//insert capump
	insert cdp
	insert leak
     }

     for i=0,456 axon[i]{
	insert NaV11
	insert NaV12
	insert NaV16
	insert KV11
	insert KV31
	insert KV32
	insert Ca12L
	insert Ca13L
	insert Ca22N
	insert HCN1
	insert HCN2
	insert NaKpump
	//insert capump
	insert cdp
	insert leak
     }
}

proc position() { local i
    soma for i= 0, n3d()-1{
	pt3dchange(i, x3d(i)+ $1-x, y3d(i)+$2-y, z3d(i)+$3-z, diam3d(i))
	}
    x=$1
    y=$2
    z=$3
}

proc synapses() {}
endtemplate GABAfsi