begintemplate pyramidal
public init, topol, basic_shape, subsets, geom, biophys, geom_nseg, biophys_inhomo
public synlist, x, y, z, position, connect2target

public soma, dend, axon
public all, somatic, axonal, basal

objref synlist

proc init() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  synlist= new List()
  position(1000,1000,1000)
  synapses()
}


create soma, dend[86], axon[47]

proc topol() { local i
  connect dend(0), soma(0.5)
  for i = 1, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  connect dend[21](0), dend[17](1)
  connect dend[22](0), dend[16](1)
  connect dend[23](0), dend[15](1)
  connect dend[24](0), dend[14](1)
  connect dend[25](0), dend[13](1)
  connect dend[26](0), dend[12](1)
  for i = 27, 28 connect dend[i](0), dend[i-1](1)
  connect dend[29](0), dend[27](1)
  connect dend[30](0), dend[26](1)
  connect dend[31](0), dend[11](1)
  connect dend[32](0), dend[10](1)
  connect dend[33](0), dend[9](1)
  connect dend[34](0), dend[8](1)
  for i = 35, 36 connect dend[i](0), dend[34](1)
  connect dend[37](0), dend[7](1)
  connect dend[38](0), dend[6](1)
  connect dend[39](0), dend[5](1)
  for i = 40, 41 connect dend[i](0), dend[39](1)
  connect dend[42](0), dend[4](1)
  for i = 43, 44 connect dend[i](0), dend[42](1)
  connect dend[45](0), dend[3](1)
  for i = 46, 47 connect dend[i](0), dend[45](1)
  connect dend[48](0), dend[2](1)
  connect dend[49](0), dend[1](1)
  connect dend[50](0), dend(1)
  for i = 51, 52 connect dend[i](0), dend[50](1)
  connect dend[53](0), soma(0.5)
  for i = 54, 55 connect dend[i](0), dend[53](1)
  for i = 56, 57 connect dend[i](0), soma(0.5)
  for i = 58, 60 connect dend[i](0), dend[i-1](1)
  connect dend[61](0), dend[59](1)
  connect dend[62](0), dend[58](1)
  connect dend[63](0), dend[57](1)
  for i = 64, 65 connect dend[i](0), dend[63](1)
  for i = 66, 67 connect dend[i](0), soma(0.5)
  for i = 68, 69 connect dend[i](0), dend[67](1)
  for i = 70, 71 connect dend[i](0), soma(0.5)
  for i = 72, 73 connect dend[i](0), dend[i-1](1)
  connect dend[74](0), dend[72](1)
  for i = 75, 76 connect dend[i](0), dend[74](1)
  connect dend[77](0), dend[71](1)
  connect dend[78](0), soma(0.5)
  for i = 79, 80 connect dend[i](0), dend[78](1)
  connect dend[81](0), soma(0.5)
  for i = 82, 83 connect dend[i](0), dend[i-1](1)
  connect dend[84](0), dend[82](1)
  connect dend[85](0), dend[81](1)
  connect axon(0), soma(0.5)
  for i = 1, 2 connect axon[i](0), axon(1)
  for i = 3, 4 connect axon[i](0), axon[i-1](1)
  connect axon[5](0), axon[3](1)
  for i = 6, 7 connect axon[i](0), axon[5](1)
  connect axon[8](0), axon[2](1)
  for i = 9, 10 connect axon[i](0), axon[8](1)
  for i = 11, 12 connect axon[i](0), axon[10](1)
  for i = 13, 14 connect axon[i](0), axon[12](1)
  for i = 15, 16 connect axon[i](0), axon[14](1)
  for i = 17, 18 connect axon[i](0), axon[16](1)
  for i = 19, 20 connect axon[i](0), axon[18](1)
  for i = 21, 22 connect axon[i](0), axon[20](1)
  for i = 23, 24 connect axon[i](0), axon[i-1](1)
  connect axon[25](0), axon[23](1)
  for i = 26, 27 connect axon[i](0), axon[25](1)
  for i = 28, 29 connect axon[i](0), axon[27](1)
  connect axon[30](0), axon[22](1)
  for i = 31, 32 connect axon[i](0), axon[30](1)
  for i = 33, 34 connect axon[i](0), axon[32](1)
  for i = 35, 36 connect axon[i](0), axon[34](1)
  for i = 37, 38 connect axon[i](0), axon[i-1](1)
  connect axon[39](0), axon[37](1)
  for i = 40, 41 connect axon[i](0), axon[39](1)
  for i = 42, 43 connect axon[i](0), axon[41](1)
  connect axon[44](0), axon[36](1)
  for i = 45, 46 connect axon[i](0), axon[44](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(-8.04351, 0, 0, 16.087)
	pt3dadd(0, 0, 0, 16.087)
	pt3dadd(8.04351, 0, 0, 16.087)
  }
  dend {pt3dclear()
	pt3dstyle(1, 0, 0, 0)
	pt3dadd(2.66, 8.25, -3.22, 1.49)
	pt3dadd(2.39, 8.82, -3.19, 1.49)
	pt3dadd(1.78, 9.95, -6.67, 1.49)
	pt3dadd(0.59, 10.51, -2.8, 1.49)
	pt3dadd(0.01, 10.77, -2.41, 1.49)
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  }
}
proc shape3d_2() {
  dend[10] {	pt3dadd(-5.1, 178.41, 25, 1.04)
	pt3dadd(-5.21, 179.75, 25.05, 1.04)
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  }
}
proc shape3d_3() {
  dend[16] {	pt3dadd(-12.67, 407.13, 34.73, 0.45)
	pt3dadd(-12.68, 408.18, 34.58, 0.45)
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  }
}
proc shape3d_4() {
  dend[23] {	pt3dadd(-81.8, 405, 21.31, 0.3)
	pt3dadd(-82.8, 405.05, 21.19, 0.3)
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  }
}
proc shape3d_5() {
  dend[25] {	pt3dadd(88.53, 326.03, 34.68, 0.3)
	pt3dadd(90.15, 326.23, 34.14, 0.3)
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  }
}
proc shape3d_6() {
  dend[30] {	pt3dadd(-41.16, 386.27, 6.42, 0.37)
	pt3dadd(-39.77, 387.24, 6.25, 0.37)
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  }
}
proc shape3d_7() {
  dend[33] {	pt3dadd(98.22, 163.02, 36.29, 0.3)
	pt3dadd(98.63, 162.71, 36.3, 0.3)
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  }
}
proc shape3d_8() {
  dend[38] {	pt3dadd(-13.93, 112, 18.7, 0.3)
	pt3dadd(-14.73, 111.77, 18.6, 0.3)
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  }
}
proc shape3d_9() {
  dend[43] {	pt3dadd(-29.95, 45.47, -13.8, 0.3)
	pt3dadd(-30.71, 45.31, -13.91, 0.3)
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  }
}
proc shape3d_10() {
  dend[45] {	pt3dadd(-19.64, 65.35, -13.1, 0.37)
	pt3dadd(-20.58, 66.2, -13.5, 0.37)
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  }
}
proc shape3d_11() {
  dend[48] {	pt3dadd(35.25, 35.81, 34.86, 0.3)
	pt3dadd(35.3, 34.69, 34.78, 0.3)
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  }
}
proc shape3d_12() {
  dend[51] {	pt3dadd(-31.29, 8.72, 19.67, 0.3)
	pt3dadd(-31.28, 8.15, 21.9, 0.3)
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  }
}
proc shape3d_13() {
  dend[60] {	pt3dadd(-45, 4.41, 41.7, 0.37)
	pt3dadd(-45.71, 5.48, 41.03, 0.37)
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  }
}
proc shape3d_14() {
  dend[64] {	pt3dadd(-61.83, -20.62, 29.68, 0.37)
	pt3dadd(-63.61, -21.47, 30, 0.37)
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  }
}
proc shape3d_15() {
  dend[67] {	pt3dadd(-6.84, -25.04, 62.04, 0.37)
	pt3dadd(-6.59, -25.22, 60.97, 0.37)
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  }
}
proc shape3d_16() {
  dend[73] {	pt3dadd(6.59, -60.79, 51.66, 0.37)
	pt3dadd(6.92, -61.93, 53.06, 0.37)
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  }
}
proc shape3d_17() {
  dend[78] {	pt3dadd(-6.45, -14.48, 16.09, 0.6)
	pt3dadd(-6.06, -14.2, 12.49, 0.6)
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  }
}
proc shape3d_18() {
  dend[84] {	pt3dadd(72.72, -39.07, 61.26, 0.3)
	pt3dadd(73.37, -40.16, 61.76, 0.3)
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  }
}
proc shape3d_19() {
  axon {	pt3dadd(1.77, -46.51, -3.99, 0.52)
	pt3dadd(1.98, -47.39, -2.06, 0.45)
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  }
}
proc shape3d_20() {
  axon[5] {	pt3dadd(53.44, 11.96, 9.81, 0.07)
	pt3dadd(54.92, 14.04, 9.15, 0.07)
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  }
}
proc shape3d_21() {
  axon[18] {	pt3dadd(-44.93, 0.65, 25.75, 0.07)
	pt3dadd(-43.82, 1.29, 25.95, 0.07)
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  }
}
proc shape3d_22() {
  axon[30] {	pt3dadd(65.57, -50.91, 3.93, 0.15)
	pt3dadd(67.71, -50.1, 6.22, 0.15)
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  }
}
proc shape3d_23() {
  axon[36] {  }
  axon[37] {pt3dclear()
	pt3dadd(19.12, 263.55, -71.15, 0.15)
	pt3dadd(19.32, 267.38, -68.48, 0.15)
	pt3dadd(19.11, 269.48, -68.06, 0.15)
	pt3dadd(17.17, 274.01, -67.98, 0.15)
	pt3dadd(17.89, 277.59, -67.91, 0.15)
	pt3dadd(19, 280.91, -70.05, 0.15)
	pt3dadd(18.2, 284.62, -70.44, 0.15)
	pt3dadd(17.83, 287.52, -70.28, 0.15)
	pt3dadd(19.54, 289.55, -70.98, 0.15)
	pt3dadd(19.76, 290.67, -71.27, 0.15)
	pt3dadd(20.31, 292.45, -71.07, 0.15)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
}

objref all, somatic, axonal, basal
proc subsets() { local i
  objref all, somatic, axonal, basal
  all = new SectionList()
    soma all.append()
    for i=0, 85 dend[i] all.append()
    for i=0, 46 axon[i] all.append()

  somatic = new SectionList()
    soma somatic.append()

  axonal = new SectionList()
    for i=0, 46 axon[i] axonal.append()

  basal = new SectionList()
    for i=0, 85 dend[i] basal.append()

}
proc geom() {
    forsec all {  }
}

func lambda_f() {local i, x1, x2, d1, d2, lambda

    if (n3d() < 2){
	return 1e5*sqrt(diam/(4*PI*$1*Ra*Cm))
	}
    x1 = arc3d(0)
    d1 = diam3d(0)
    lambda = 0

    for i=1, n3d()-1 {
	x2= arc3d(i)
	d2= diam3d(i)
	lambda+= (x2-x1)/sqrt(d1+d2)
	x1=x2
	d1=d2
	}

    lambda*= sqrt(2)* 1e-5*sqrt(4*PI*$1*Ra*Cm)
    return L/lambda
}

proc geom_nseg() {
    forsec all {nseg = int((L/(0.1*lambda_f(100))+0.999)/2)*2 +1} 
}
proc biophys() {
    forsec all {
          Ra= 150
          Cm= 0.5
    }

    soma{
	insert NaV11
	insert NaV12
	insert NaV16
	insert KV12
	insert KV14
	insert KV31
	insert Ca12L
	insert Ca21PQ	
	insert Ca13L
	insert Ca31T
	insert Ca33T
	//insert HCN1
	//insert HCN2
	insert NaKpump
	//insert capump
	insert leak 
	//insert glurelease   
	insert rel
     }

     for i=0,85 dend[i]{
	insert NaV11
	insert NaV12
	insert NaV16
	insert KV12
	insert KV14
	insert KV31
	insert Ca12L
	insert Ca13L
	insert Ca21PQ	
	insert Ca31T

	insert Ca33T
	insert HCN1
	insert HCN2
	insert NaKpump
	//insert capump
	insert cdp
	insert leak    
     }

     for i=0,46 axon[i]{
	insert NaV11
	insert NaV12
	insert NaV16
	insert KV12
	insert KV14
	insert KV31
	insert Ca12L
	insert Ca13L
	insert Ca21PQ	//test
	insert Ca31T

	insert Ca33T
	insert HCN1
	insert HCN2
	insert NaKpump
	//insert capump
	insert cdp
	insert leak    
     }

}

proc position() { local i
    soma for i= 0, n3d()-1{
	pt3dchange(i, x3d(i)+ $1-x, y3d(i)+$2-y, z3d(i)+$3-z, diam3d(i))
	}
    x=$1
    y=$2
    z=$3
}

proc synapses() {}
endtemplate pyramidal